PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Experiment_Alli
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Routines
  Routine Instructions_2
    TextComponent Instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Hello and welcome to the experiment!

        In this task, you are presented with numbers from 1 to 9. Your job is to press the space bar for all the numbers unless you see the number 3. In this case, you should try to inhibit your response and not press the space bar.

        Try to respond as fast and as accurately as possible!

        The experiment has two conditions, masked and non-masked conditions. In both conditions, your task is the same: press the space bar unless you see number 3. This might be more difficult in the masked conditions, but that's where the magic is!

        When you are ready to move to the experiment, press the space bar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine unmasked_trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1
      text = +
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.05
      text [set every repeat] = $number
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
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  Routine masked_trial
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.05
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      text [set every repeat]:
        $number
    ImageComponent image
      image [set every repeat] = $mask
      size = (0.5, 0.5)
      startVal [time (s)] = 2.52
      stopVal [duration (s)] = 0.03
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
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Flow
  Routine Instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition1_experiment.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial': 1, 'condition': 'go', 'number': 1, 'response': 'space'},
      {'trial': 2, 'condition': 'go', 'number': 2, 'response': 'space'},
      {'trial': 3, 'condition': 'no-go', 'number': 3, 'response': None},
      {'trial': 4, 'condition': 'go', 'number': 4, 'response': 'space'},
      {'trial': 5, 'condition': 'go', 'number': 5, 'response': 'space'},
      {'trial': 6, 'condition': 'go', 'number': 6, 'response': 'space'},
      {'trial': 7, 'condition': 'go', 'number': 7, 'response': 'space'},
      {'trial': 8, 'condition': 'go', 'number': 8, 'response': 'space'},
      {'trial': 9, 'condition': 'go', 'number': 9, 'response': 'space'},
      {'trial': 10, 'condition': 'go', 'number': 1, 'response': 'space'},
      {'trial': 11, 'condition': 'go', 'number': 2, 'response': 'space'},
      {'trial': 12, 'condition': 'no-go', 'number': 3, 'response': None},
      {'trial': 13, 'condition': 'go', 'number': 4, 'response': 'space'},
      {'trial': 14, 'condition': 'go', 'number': 5, 'response': 'space'},
      {'trial': 15, 'condition': 'go', 'number': 6, 'response': 'space'},
      {'trial': 16, 'condition': 'go', 'number': 7, 'response': 'space'},
      {'trial': 17, 'condition': 'go', 'number': 8, 'response': 'space'},
      {'trial': 18, 'condition': 'go', 'number': 9, 'response': 'space'},
      {'trial': 19, 'condition': 'go', 'number': 1, 'response': 'space'},
      {'trial': 20, 'condition': 'go', 'number': 2, 'response': 'space'},
      {'trial': 21, 'condition': 'no-go', 'number': 3, 'response': None},
      {'trial': 22, 'condition': 'go', 'number': 4, 'response': 'space'}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
    Routine unmasked_trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = condition2_experiment.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial': 1, 'condition': 'go', 'number': 1, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 2, 'condition': 'go', 'number': 2, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 3, 'condition': 'no-go', 'number': 3, 'response': None, 'mask': 'gabor_0_deg.png'},
      {'trial': 4, 'condition': 'go', 'number': 4, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 5, 'condition': 'go', 'number': 5, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 6, 'condition': 'go', 'number': 6, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 7, 'condition': 'go', 'number': 7, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 8, 'condition': 'go', 'number': 8, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 9, 'condition': 'go', 'number': 9, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 10, 'condition': 'go', 'number': 1, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 11, 'condition': 'go', 'number': 2, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 12, 'condition': 'no-go', 'number': 3, 'response': None, 'mask': 'gabor_0_deg.png'},
      {'trial': 13, 'condition': 'go', 'number': 4, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 14, 'condition': 'go', 'number': 5, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 15, 'condition': 'go', 'number': 6, 'response': 'space', 'mask': 'gabor_0_deg.png'},
      {'trial': 16, 'condition': 'go', 'number': 7, 'response': 'space', 'mask': 'gabor_0_deg.png'}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
    Routine masked_trial
  LoopTerminator trials_2
